---
API: 2.1
OpenSesame: 3.2.6
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Flanker Task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "/Users/majima/OneDrive/ドキュメント/Classes/資料/心理学実験/Flanker"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background white

define sketchpad blank
	set duration 1000
	set description "Displays stimuli"

define sketchpad end_exp
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="これですべて終了です。お疲れ様でした。" x=0 y=0 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（何かキーを押してください）" x=0 y=320 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run form_gender always
	run form_age always
	run form_handedness always
	run intro_general1 always
	run intro_general2 always
	run seq_prac always
	run seq_main always

define sketchpad fb_correct
	set duration 500
	set description 視覚刺激の呈示
	draw textline center=1 color="#0000ff" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="正しいキーです！" x=0 y=0 z_index=0

define sketchpad fb_incorrect
	set duration 500
	set description 視覚刺激の呈示
	draw textline center=1 color=red font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="間違ったキーです！" x=0 y=0 z_index=0

define feedback feedback_main
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="Results of main session" x=0 y=-320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Mean Response Time: [avg_rt] ms." x=0 y=-96 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="結果を確認したら、何かキーを押してください。" x=-320 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Your accuracy: [acc] %" x=-96 y=0 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="メモをとる必要はありません。" x=-160 y=160 z_index=0

define feedback feedback_practice
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="Results of practice session" x=0 y=-288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Mean Response Time: [avg_rt] ms." x=-320 y=-96 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="結果を確認したら、何かキーを押してください。" x=0 y=288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Your accuracy: [acc]  %" x=-320 y=0 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="メモをとる必要はありません。" x=-128 y=160 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=96 html=yes show_if=always text="＋" x=0.0 y=-32.0 z_index=0

define form_text_input form_age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "Demographic #2"
	set form_question "年齢を半角数字で入力(ENTERで確定)"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_multiple_choice form_gender
	set timeout infinite
	set spacing 10
	set question "性別（男性 = 1，女性 = 2）"
	__options__
	1
	2
	__end__
	set margins "50;50;50;50"
	set form_var gender
	set form_title "Demographic #1"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice form_handedness
	set timeout infinite
	set spacing 10
	set question "利き手は左右どちら？ (1 = 右, 2 = 左)"
	__options__
	1
	2
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "Demographic #3"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script get_valid_RT
	set description "Executes Python code"
	___run__
	tmp_rt = self.get('response_time')
	tmp_correct = self.get('correct')
	rt_correct = ''
	if tmp_correct == 1:
		rt_correct = tmp_rt
	exp.set('valid_RT',rt_correct)
	__end__
	set _prepare ""

define sketchpad intro_general1
	set start_response_interval no
	set show_cusor no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="この実験では，" x=-384 y=-256 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=22 html=yes show_if=always text="1) 毎回，まず最初に画面の中央に ＋（注視点と言います）が表示され，" x=-448 y=-224 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=22 html=yes show_if=always text="2) その後しばらくすると，以下のような図形が表示されます。" x=-448 y=-64 z_index=0
	draw textline center=0 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（読み終えたら何かキーを押してください）" x=-224 y=352 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="3) このとき，画面に表示された図形の三番目（中央）の矢印が" x=-448 y=160 z_index=0
	draw textline center=0 color=red font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="＞ の時は K のキー" x=-384 y=240 z_index=0
	draw textline center=1 color="#550000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text=マウスカーソルを邪魔にならないよう画面の右上または左上の端に移動してください x=0 y=-352 z_index=0
	draw textline center=1 color="#550000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="これ以後、実験ではマウスを使いません。" x=0 y=-320 z_index=0
	draw textline center=0 color=red font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="＜ の時は S のキー" x=-384 y=210 z_index=0
	draw textline center=0 color=black font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="を押してください。" x=-416 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="+" x=0 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＜＜＜＜＜" x=-128 y=32 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＞＞＞＞＞" x=-128 y=-32 z_index=0

define sketchpad intro_general2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#00007f" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="図形が出現した時に素早くかつ正確にキーを押してください。" x=-448 y=224 z_index=0
	draw textline center=0 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="以上の説明を十分に理解したら，何かキーを押して実験を開始してください。" x=-448 y=320 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="まず最初に練習を行います。" x=-448 y=352 z_index=0
	draw textline center=0 color="#00007f" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="なお実験中は画面中央を見続けてください。また，S，K 以外のキーは無視されます。" x=-448 y=256 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="4) 周囲の矢印は無視して，真ん中の矢印のみをみて判断してください。" x=-480 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=28 html=yes show_if=always text="真ん中が左を向いているので S" x=384 y=-224 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color="#fc0107" fill=1 penwidth=1 show_if=always x1=384 x2=384 y1=-96 y2=-160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=28 html=yes show_if=always text="真ん中が右を向いているので K" x=384 y=96 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=green fill=1 penwidth=1 show_if=always x1=384 x2=384 y1=-32 y2=32 z_index=0
	draw line color="#000000" penwidth=2 show_if=always x1=-416 x2=448 y1=-64 y2=-64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＜＜＜＜＜" x=0 y=-288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＞＞＜＞＞" x=0 y=-192 z_index=0
	draw rect color=red fill=0 h=192 penwidth=3 show_if=always w=64 x=-32 y=-320 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＞＞＞＞＞" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＜＜＞＜＜" x=0 y=96 z_index=0
	draw rect color=green fill=0 h=192 penwidth=3 show_if=always w=64 x=-32 y=-32 z_index=0

define sketchpad intro_main
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="それでは、本番（本試行）を開始します。" x=0 y=-288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="本試行は、開始後全実験が終了するまで途中で中断することはできません。" x=-480 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="" x=-32 y=64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="" x=-32 y=64 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="実験について疑問がある場合は今のうちに解決してください。" x=-480 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="また、休憩が必要な場合は今のうちにとっておいてください。" x=-480 y=-96 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="本試行の所要時間は、人によりますが、５～１０分程度です。" x=-480 y=-32 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="繰り返しになりますが、 図形が画面に現れてから素早く S または K のキーを押してください （出現前にキーを押しても無効です）。" x=-480 y=32 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="準備ができたら何かキーを押して実験を開始してください。" x=32 y=288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="視線は画面中央の　+　に合わせてください。" x=-480 y=128 z_index=0

define sketchpad intro_prac
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="それでは、まず最初に練習を行います。" x=-192 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="中央のの矢印が ＜ ならば S のキー，＞ ならば K のキーを押してください。" x=32 y=-288 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="準備ができたら、何かキーを押して練習を始めてください。" x=32 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=S x=128 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=K x=128 y=64 z_index=0
	draw arrow arrow_body_length=0.45 arrow_body_width=0.55 arrow_head_width=30 color="#0000ff" fill=1 penwidth=1 show_if=always x1=32 x2=96 y1=-96 y2=-96 z_index=0
	draw arrow arrow_body_length=0.45 arrow_body_width=0.55 arrow_head_width=30 color="#0000ff" fill=1 penwidth=1 show_if=always x1=32 x2=96 y1=64 y2=64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="視線は画面中央の+に合わせてください。また，予め，左手の人差し指をS，右手の人差し指をKのキーの上に置いてください。" x=32 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="なお，キーを押した後，正しいキーが押されたかどうかが表示されます。" x=-32 y=256 z_index=0
	draw line color=black penwidth=1 show_if=always x1=-480 x2=288 y1=-17 y2=-17 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＜＜＜＜＜" x=-256 y=-160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＞＞＜＞＞" x=-256 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＞＞＞＞＞" x=-256 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="＜＜＞＜＜" x=-256 y=96 z_index=0

define keyboard_response key_response_trial
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "s;k"

define logger logger
	set description 実験データをログファイルに書き出します
	set auto_log no
	log age
	log congruency
	log correct
	log correct_response
	log gender
	log response
	log response_time
	log stim_id
	log subject_nr
	log handedness
	log valid_RT
	log acc
	log tgt_dir
	log cnt_dir
	log target

define loop loop_main
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description 他のアイテムを繰り返し実行
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 congruency con
	setcycle 0 tgt_dir left
	setcycle 0 correct_response s
	setcycle 0 cnt_dir left
	setcycle 0 stim_id "con.l.1"
	setcycle 0 target "＜＜＜＜＜"
	setcycle 1 congruency con
	setcycle 1 tgt_dir right
	setcycle 1 correct_response k
	setcycle 1 cnt_dir right
	setcycle 1 stim_id "con.r.1"
	setcycle 1 target "＞＞＞＞＞"
	setcycle 2 congruency incon
	setcycle 2 tgt_dir right
	setcycle 2 correct_response k
	setcycle 2 cnt_dir left
	setcycle 2 stim_id "incon.r.1"
	setcycle 2 target "＜＜＞＜＜"
	setcycle 3 congruency incon
	setcycle 3 tgt_dir left
	setcycle 3 correct_response s
	setcycle 3 cnt_dir right
	setcycle 3 stim_id "incon.l.1"
	setcycle 3 target "＞＞＜＞＞"
	setcycle 4 congruency con
	setcycle 4 tgt_dir left
	setcycle 4 correct_response s
	setcycle 4 cnt_dir left
	setcycle 4 stim_id "con.l.2"
	setcycle 4 target "＜＜＜＜＜"
	setcycle 5 congruency con
	setcycle 5 tgt_dir right
	setcycle 5 correct_response k
	setcycle 5 cnt_dir right
	setcycle 5 stim_id "con.r.2"
	setcycle 5 target "＞＞＞＞＞"
	setcycle 6 congruency incon
	setcycle 6 tgt_dir right
	setcycle 6 correct_response k
	setcycle 6 cnt_dir left
	setcycle 6 stim_id "incon.r.2"
	setcycle 6 target "＜＜＞＜＜"
	setcycle 7 congruency incon
	setcycle 7 tgt_dir left
	setcycle 7 correct_response s
	setcycle 7 cnt_dir right
	setcycle 7 stim_id "incon.l.2"
	setcycle 7 target "＞＞＜＞＞"
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	run main_seq

define loop loop_practice
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item practice_trial
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set column_order "SOA;file_tgt;cue_pos;ISI;congruency;file_cue;target_pos"
	set break_if_on_first yes
	set break_if never
	setcycle 0 congruency con
	setcycle 0 tgt_dir left
	setcycle 0 correct_response s
	setcycle 0 cnt_dir left
	setcycle 0 target "＜＜＜＜＜"
	setcycle 1 congruency con
	setcycle 1 tgt_dir right
	setcycle 1 correct_response k
	setcycle 1 cnt_dir right
	setcycle 1 target "＞＞＞＞＞"
	setcycle 2 congruency incon
	setcycle 2 tgt_dir right
	setcycle 2 correct_response k
	setcycle 2 cnt_dir left
	setcycle 2 target "＜＜＞＜＜"
	setcycle 3 congruency incon
	setcycle 3 tgt_dir left
	setcycle 3 correct_response s
	setcycle 3 cnt_dir right
	setcycle 3 target "＞＞＜＞＞"
	run practice_seq

define sequence main_seq
	set flush_keyboard yes
	set description アイテムをシーケンスで実行
	run blank always
	run fixation always
	run target always
	run key_response_trial always
	run get_valid_RT always
	run logger always
	run fb_correct "[correct] = 1"
	run fb_incorrect "[correct] = 0"

define sequence practice_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation always
	run target always
	run key_response_trial always
	run fb_correct "[correct] = 1"
	run fb_incorrect "[correct] = 0"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence seq_main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run intro_main always
	run loop_main always
	run feedback_main always
	run end_exp always

define sequence seq_prac
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run intro_prac always
	run loop_practice always
	run feedback_practice always

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=96 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

