---
API: 2
OpenSesame: 3.1.9
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "/Users/majima/Dropbox/Classes/資料/心理学実験/注意/opensesame-3.0"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background white

define sketchpad SOA
	set duration "[ISI]"
	set description "Displays stimuli"
	draw image center=1 file="3BoxFixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad blank
	set duration 1000
	set description "Displays stimuli"

define sketchpad cue
	set duration 100
	set description "Displays stimuli"
	draw image center=1 file="[file_cue]" scale=1 show_if=always x=0 y=0 z_index=0

define logger data_logger
	set description logger
	set auto_log no
	log SOA
	log congruency
	log cue_pos
	log datetime
	log experiment_file
	log response
	log response_time
	log subject_nr
	log target_pos
	log repeat
	log age
	log gender

define sketchpad end_exp
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="これですべて終了です。お疲れ様でした。" x=0 y=0 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（何かキーを押してください）" x=0 y=320 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run form_gender always
	run form_age always
	run intro_general1 always
	run intro_general2 always
	run seq_prac always
	run seq_main always

define feedback feedback_main
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="Results of main session" x=0 y=-288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Mean Response Time: [avg_rt] ms." x=-320 y=-96 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="結果を確認したら、何かキーを押してください。" x=-320 y=96 z_index=0

define feedback feedback_practice
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=64 html=yes show_if=always text="Results of practice session" x=0 y=-288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Mean Response Time: [avg_rt] ms." x=-320 y=-96 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="結果を確認したら、何かキーを押してください。" x=0 y=288 z_index=0

define sketchpad fixation_point
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="3BoxFixation.png" scale=1 show_if=always x=0 y=0 z_index=0

define form_text_input form_age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "Demographic #2"
	set form_question "年齢を半角数字で入力(ENTERで確定)"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_multiple_choice form_gender
	set timeout infinite
	set spacing 10
	set question 性別
	__options__
	男性
	女性
	__end__
	set margins "50;50;50;50"
	set form_var gender
	set form_title "Demographic #1"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define notepad getting_started
	set note "Posner Cueing Task"
	set description "Some pointers to help you get started!"

define sketchpad intro_general1
	set start_response_interval no
	set show_cusor no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="この実験では，画面に３つの正方形のボックスが表示され" x=-160 y=-224 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=22 html=yes show_if=always text="1) 毎回，まず最初に中央のボックスの中に ＋（注視点と言います）が" x=-448 y=-192 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=22 html=yes show_if=always text="2) その後しばらくすると左右どちらかのボックスに X （ターゲット）の文字が表示されます。 " x=-448 y=-128 z_index=0
	draw image center=1 file="left-target.png" scale=0.7 show_if=always x=0 y=0 z_index=0
	draw textline center=0 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（読み終えたら何かキーを押してください）" x=-256 y=320 z_index=0
	draw textline center=0 color="#00007f" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="例）ターゲット（X）が左のボックスに出ている場合" x=-320 y=96 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="3) + に注目し続けたまま、画面に　X　が表示されたら" x=-448 y=160 z_index=0
	draw textline center=0 color="#00007f" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="素早くスペースキーを押してください。" x=-256 y=192 z_index=0
	draw textline center=1 color="#550000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text=マウスカーソルを邪魔にならないよう画面の右上または左上の端に移動してください x=0 y=-352 z_index=0
	draw textline center=1 color="#550000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=20 html=yes show_if=always text="これ以後、実験ではマウスを使いません。" x=0 y=-320 z_index=0

define sketchpad intro_general2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#00007f" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="キー押しは文字 X が左右どちらかのボックスに出現した時に素早く行ってください。" x=-448 y=0 z_index=0
	draw textline center=0 color="#00007f" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="灰色の正方形が表示されるタイミングではありません。" x=-448 y=32 z_index=0
	draw textline center=0 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="以上の説明を十分に理解したら，何かキーを押して実験を開始してください。" x=-448 y=256 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="まず最初に練習を行います。" x=-448 y=288 z_index=0
	draw textline center=0 color="#00007f" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="なお実験中は画面中央の＋を見続けてください。" x=-448 y=160 z_index=0
	draw image center=1 file="left-cue.png" scale=0.7 show_if=always x=-32 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="4) ただし、画面には X ではなく、↓のような灰色の正方形が表示されることがあります。" x=-480 y=-320 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="この時はスペースキーを押さないでください（押しても無効になります）。" x=-448 y=-64 z_index=0

define sketchpad intro_main
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="それでは、本番（本試行）を開始します。" x=0 y=-288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="本試行は、開始後全実験が終了するまで途中で中断することはできません。" x=-480 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="" x=-32 y=64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="" x=-32 y=64 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="実験について疑問がある場合は今のうちに解決してください。" x=-480 y=-160 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="また、休憩が必要な場合は今のうちにとっておいてください。" x=-480 y=-96 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="本試行の所要時間は、人によりますが、５～１０分程度です。" x=-480 y=-32 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="繰り返しになりますが、X　が画面に現れてから素早くスペースキーを押してください。 " x=-480 y=32 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（出現前にキーを押しても無効です）" x=-448 y=64 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="準備ができたら何かキーを押して実験を開始してください。" x=32 y=288 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="視線は画面中央の　+　に合わせてください。" x=-480 y=128 z_index=0

define sketchpad intro_prac
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="それでは、まず最初に練習を行います。" x=-192 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="X　が左右どちらかのボックスに出てきたらスペースキーを押してください。" x=32 y=-256 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="準備ができたら、何かキーを押して練習を始めてください。" x=32 y=320 z_index=0
	draw image center=1 file="right-target.png" scale=0.7 show_if=always x=0 y=128 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text=押さない x=448 y=-32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text=SPACE x=448 y=128 z_index=0
	draw arrow arrow_body_length=0.45 arrow_body_width=0.55 arrow_head_width=30 color="#0000ff" fill=1 penwidth=1 show_if=always x1=320 x2=384 y1=-32 y2=-32 z_index=0
	draw arrow arrow_body_length=0.45 arrow_body_width=0.55 arrow_head_width=30 color="#0000ff" fill=1 penwidth=1 show_if=always x1=320 x2=384 y1=128 y2=128 z_index=0
	draw image center=1 file="left-cue.png" scale=0.7 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="（灰色の正方形の時は押しません。）" x=-192 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="視線は画面中央の+に合わせてください。" x=-160 y=-160 z_index=0

define keyboard_response key_response_trial
	set timeout infinite
	set flush no
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define loop loop_main
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item main_trial
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set column_order "SOA;file_tgt;cue_pos;target_pos;ISI;congruency;file_cue"
	set break_if_on_first yes
	set break_if never
	setcycle 0 SOA 200
	setcycle 0 file_tgt "left-target.png"
	setcycle 0 cue_pos left
	setcycle 0 ISI 100
	setcycle 0 congruency con
	setcycle 0 file_cue "left-cue.png"
	setcycle 0 target_pos left
	setcycle 1 SOA 400
	setcycle 1 file_tgt "left-target.png"
	setcycle 1 cue_pos left
	setcycle 1 ISI 300
	setcycle 1 congruency con
	setcycle 1 file_cue "left-cue.png"
	setcycle 1 target_pos left
	setcycle 2 SOA 800
	setcycle 2 file_tgt "left-target.png"
	setcycle 2 cue_pos left
	setcycle 2 ISI 700
	setcycle 2 congruency con
	setcycle 2 file_cue "left-cue.png"
	setcycle 2 target_pos left
	setcycle 3 SOA 1200
	setcycle 3 file_tgt "left-target.png"
	setcycle 3 cue_pos left
	setcycle 3 ISI 1100
	setcycle 3 congruency con
	setcycle 3 file_cue "left-cue.png"
	setcycle 3 target_pos left
	setcycle 4 SOA 200
	setcycle 4 file_tgt "right-target.png"
	setcycle 4 cue_pos left
	setcycle 4 ISI 100
	setcycle 4 congruency incon
	setcycle 4 file_cue "left-cue.png"
	setcycle 4 target_pos right
	setcycle 5 SOA 400
	setcycle 5 file_tgt "right-target.png"
	setcycle 5 cue_pos left
	setcycle 5 ISI 300
	setcycle 5 congruency incon
	setcycle 5 file_cue "left-cue.png"
	setcycle 5 target_pos right
	setcycle 6 SOA 800
	setcycle 6 file_tgt "right-target.png"
	setcycle 6 cue_pos left
	setcycle 6 ISI 700
	setcycle 6 congruency incon
	setcycle 6 file_cue "left-cue.png"
	setcycle 6 target_pos right
	setcycle 7 SOA 1200
	setcycle 7 file_tgt "right-target.png"
	setcycle 7 cue_pos left
	setcycle 7 ISI 1100
	setcycle 7 congruency incon
	setcycle 7 file_cue "left-cue.png"
	setcycle 7 target_pos right
	setcycle 8 SOA 200
	setcycle 8 file_tgt "right-target.png"
	setcycle 8 cue_pos right
	setcycle 8 ISI 100
	setcycle 8 congruency con
	setcycle 8 file_cue "right-cue.png"
	setcycle 8 target_pos right
	setcycle 9 SOA 400
	setcycle 9 file_tgt "right-target.png"
	setcycle 9 cue_pos right
	setcycle 9 ISI 300
	setcycle 9 congruency con
	setcycle 9 file_cue "right-cue.png"
	setcycle 9 target_pos right
	setcycle 10 SOA 800
	setcycle 10 file_tgt "right-target.png"
	setcycle 10 cue_pos right
	setcycle 10 ISI 700
	setcycle 10 congruency con
	setcycle 10 file_cue "right-cue.png"
	setcycle 10 target_pos right
	setcycle 11 SOA 1200
	setcycle 11 file_tgt "right-target.png"
	setcycle 11 cue_pos right
	setcycle 11 ISI 1100
	setcycle 11 congruency con
	setcycle 11 file_cue "right-cue.png"
	setcycle 11 target_pos right
	setcycle 12 SOA 200
	setcycle 12 file_tgt "left-target.png"
	setcycle 12 cue_pos right
	setcycle 12 ISI 100
	setcycle 12 congruency incon
	setcycle 12 file_cue "right-cue.png"
	setcycle 12 target_pos left
	setcycle 13 SOA 400
	setcycle 13 file_tgt "left-target.png"
	setcycle 13 cue_pos right
	setcycle 13 ISI 300
	setcycle 13 congruency incon
	setcycle 13 file_cue "right-cue.png"
	setcycle 13 target_pos left
	setcycle 14 SOA 800
	setcycle 14 file_tgt "left-target.png"
	setcycle 14 cue_pos right
	setcycle 14 ISI 700
	setcycle 14 congruency incon
	setcycle 14 file_cue "right-cue.png"
	setcycle 14 target_pos left
	setcycle 15 SOA 1200
	setcycle 15 file_tgt "left-target.png"
	setcycle 15 cue_pos right
	setcycle 15 ISI 1100
	setcycle 15 congruency incon
	setcycle 15 file_cue "right-cue.png"
	setcycle 15 target_pos left
	run main_trial

define loop loop_practice
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item practice_trial
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set column_order "SOA;file_tgt;cue_pos;ISI;congruency;file_cue;target_pos"
	set break_if_on_first yes
	set break_if never
	setcycle 0 ISI 100
	setcycle 0 SOA 200
	setcycle 0 congruency con
	setcycle 0 cue_pos left
	setcycle 0 file_cue "left-cue.png"
	setcycle 0 file_tgt "left-target.png"
	setcycle 0 target_pos left
	setcycle 1 ISI 1100
	setcycle 1 SOA 1200
	setcycle 1 congruency con
	setcycle 1 cue_pos left
	setcycle 1 file_cue "left-cue.png"
	setcycle 1 file_tgt "left-target.png"
	setcycle 1 target_pos left
	setcycle 2 ISI 300
	setcycle 2 SOA 400
	setcycle 2 congruency incon
	setcycle 2 cue_pos left
	setcycle 2 file_cue "left-cue.png"
	setcycle 2 file_tgt "right-target.png"
	setcycle 2 target_pos right
	setcycle 3 ISI 700
	setcycle 3 SOA 800
	setcycle 3 congruency incon
	setcycle 3 cue_pos left
	setcycle 3 file_cue "left-cue.png"
	setcycle 3 file_tgt "right-target.png"
	setcycle 3 target_pos right
	setcycle 4 ISI 300
	setcycle 4 SOA 400
	setcycle 4 congruency con
	setcycle 4 cue_pos right
	setcycle 4 file_cue "right-cue.png"
	setcycle 4 file_tgt "right-target.png"
	setcycle 4 target_pos right
	setcycle 5 ISI 700
	setcycle 5 SOA 800
	setcycle 5 congruency con
	setcycle 5 cue_pos right
	setcycle 5 file_cue "right-cue.png"
	setcycle 5 file_tgt "right-target.png"
	setcycle 5 target_pos right
	setcycle 6 ISI 100
	setcycle 6 SOA 200
	setcycle 6 congruency incon
	setcycle 6 cue_pos right
	setcycle 6 file_cue "right-cue.png"
	setcycle 6 file_tgt "left-target.png"
	setcycle 6 target_pos left
	setcycle 7 ISI 1100
	setcycle 7 SOA 1200
	setcycle 7 congruency incon
	setcycle 7 cue_pos right
	setcycle 7 file_cue "right-cue.png"
	setcycle 7 file_tgt "left-target.png"
	setcycle 7 target_pos left
	run practice_trial

define loop loop_repeat
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item loop_main
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order repeat
	set break_if_on_first yes
	set break_if never
	setcycle 0 repeat 1
	setcycle 1 repeat 2
	setcycle 2 repeat 3
	setcycle 3 repeat 4
	setcycle 4 repeat 5
	setcycle 5 repeat 6
	run loop_main

define sequence main_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation_point always
	run cue always
	run SOA always
	run target always
	run key_response_trial always
	run data_logger always

define sequence practice_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank always
	run fixation_point always
	run cue always
	run SOA always
	run target always
	run key_response_trial always

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script script_hidecursor
	set description "Executes Python code"
	___run__
	from openexp.mouse import mouse
	my_mouse = mouse(exp, visible=False)
	__end__
	set _prepare ""

define sequence seq_main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run intro_main always
	run loop_repeat always
	run feedback_main always
	run end_exp always

define sequence seq_prac
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run intro_prac always
	run loop_practice always
	run feedback_practice always

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[file_tgt]" scale=1 show_if=always x=0 y=0 z_index=0

